#pragma TextEncoding = "UTF-8"
#pragma rtGlobals=1	// Use modern global access method

// Driver communicates over serial.
// Procedure written by Christian Olsen 2017-03-15
// Updated to VISA by Christian Olsen, 2018-05-xx
// Both axes are powered by Lakeshore 625 power supplies.


////////////////////////////
//// Lakeshore 625 COMM ////
////////////////////////////

function openLS625connection(instrVarName, visa_address, amps_per_tesla, max_field, max_ramprate, [verbose])
	// instrID is the name of the global variable that will be used for communication
	// visa_address is the VISA address string, i.e. ASRL1::INSTR
	
	/////   amps_per_tesla, max_field, max_ramprate /////
	/////        in A/T, mT, mT/min
	// LD50 (AMI vector):
	//    x -- 55.4939, 1000, 154.287
	//    y -- 55.2181, 1000, 155.058
	//    z -- 9.95025, 6000, 1159.57
	
	string instrVarName, visa_address
	variable amps_per_tesla, max_field, max_ramprate, verbose
	
	if(paramisdefault(verbose))
		verbose=1
	elseif(verbose!=1)
		verbose=0
	endif
	
	variable localRM
	variable status = viOpenDefaultRM(localRM) // open local copy of resource manager
	if(status < 0)
		VISAerrormsg("open LS625 connection:", localRM, status)
		abort
	endif
	
	string comm = ""
	sprintf comm, "name=LS625,instrID=%s,visa_address=%s" instrVarName, visa_address
//	string options = "baudrate=57600,databits=7,stopbits=1,parity=1,test_query=*IDN?"
	string options = "baudrate=57600,databits=7,stopbits=1,parity=1"

	openVISAinstr(comm, options=options, localRM=localRM, verbose=verbose)

	nvar localID = $(instrVarName)
	
	svar/z ls625_names
	if(!svar_exists(ls625_names))
		string /g ls625_names = AddListItem(instrVarName, "")
		string /g ls625_visaIDs =AddListItem(num2istr(localID), "")
	else
		svar ls625_visaIDs
		variable idx = WhichListItem(instrVarName, ls625_names) // lookup name
		if(idx>-1)
			// found an instrument with that name
			// replace the visaID value in the other list
			ls625_visaIDs = RemoveListItem(idx, ls625_visaIDs)
			ls625_visaIDs = AddListItem(num2istr(localID), ls625_visaIDs, ";", idx)
		else
			// this is a new variable name
			// add additional entries to both lists
			ls625_names = AddListItem(instrVarName, ls625_names)
			ls625_visaIDs = AddListItem(num2istr(localID), ls625_visaIDs)
		endif
	endif
	
	variable /g $("amps_per_tesla_"+instrVarName) = amps_per_tesla
	variable /g $("max_field_"+instrVarName) = max_field
	variable /g $("max_ramprate_"+instrVarName) = max_ramprate

end

function /s ls625_lookupVarName(instrID)
	variable instrID
	
	svar ls625_names, ls625_visaIDs
	variable idx = WhichListItem(num2istr(instrID), ls625_visaIDs)
	if(idx>-1)
		return StringFromList(idx, ls625_names)
	else
		abort "[ERROR]: Could not find global variables matching ls625 instrument name"
	endif
		
end

////////////////////////
//// Get functions ////
///////////////////////

threadsafe function getLS625current(instrID) // Units: A
	variable instrID
	variable current

	current = str2num(queryInstr(instrID,"RDGI?\r\n", read_term = "\r\n"))
	
	return current
end

function getLS625field(instrID) // Units: mT
	variable instrID
	nvar apt = $("amps_per_tesla_"+ls625_lookupVarName(instrID))
	variable field, current
	
	current = getLS625current(instrID)
	field = Round_Number(current/apt*1000,5)

	return field
end

function getLS625rate(instrID) // Units: mT/min
	variable instrID
	nvar apt = $("amps_per_tesla_"+ls625_lookupVarName(instrID))
	wave/t sweepratevalstr
	variable rampratefield, currentramprate
	svar instrDescX,instrDescZ

	string l625 = getResourceAddress(instrID)

	currentramprate = str2num(queryInstr(instrID,"RATE?\r\n", read_term = "\r\n")) // A/s
	rampratefield = Round_Number(currentramprate/apt*60*1000,5)

	return rampratefield
end

////////////////////////
//// Set functions ////
//////////////////////

function setLS625current(instrID,output) // Units: A
	variable instrID,output
	string cmd
	nvar maxf = $("max_field_"+ls625_lookupVarName(instrID))
	nvar apt = $("amps_per_tesla_"+ls625_lookupVarName(instrID))
	
	// check for NAN and INF
	if(sc_check_naninf(output) != 0)
		abort "trying to set output to NaN or Inf"
	endif


	if (abs(output) > maxf*apt/1000)
		print "Max current is "+num2str(maxf*apt/1000)+" A"
	else
		cmd = "SETI "+num2str(output)
		writeInstr(instrID, cmd+"\r\n")
	endif
	
end

function setLS625field(instrID,output) // Units: mT
	variable instrID, output
	nvar maxf = $("max_field_"+ls625_lookupVarName(instrID))
	nvar apt = $("amps_per_tesla_"+ls625_lookupVarName(instrID))
	variable round_amps
	string cmd

	if (abs(output) > maxf)
		print "Max field is "+num2str(maxf)+" mT"
		return 0
	else
		round_amps = Round_Number(output*apt/1000,5)
		setLS625current(instrID,round_amps)
		return 1
	endif
end

function setLS625fieldwait(instrID,output)
	variable instrID, output

	setLS625field(instrID,output)
	do
		sc_sleep(0.1)
		getLS625field(instrID)
	while(checkLS625ramp(instrID))
end

function setLS625rate(instrID,output) // Units: mT/min
	variable instrID, output
	nvar maxrr = $("max_ramprate_"+ls625_lookupVarName(instrID))
	nvar apt = $("amps_per_tesla_"+ls625_lookupVarName(instrID))
	variable ramprate_amps
	string cmd
	
	// check for NAN and INF
	if(sc_check_naninf(output) != 0)
		abort "trying to set ramp rate to NaN or Inf"
	endif


	if (output < 0 || output > maxrr)
		print "Max sweep rate is "+num2str(maxrr)+" mT/min"
		return 0
	else
		ramprate_amps = Round_Number(output*(apt/(1000*60)),5) // A/s
		cmd = "RATE "+num2str(ramprate_amps)
		writeInstr(instrID,cmd+"\r\n")
		return 1
	endif
	
end

///////////////////
//// Utilities ////
///////////////////

function Round_Number(number,decimalplace) //for integer pass 0 as decimalplace
	variable number, decimalplace
	variable multiplier
	multiplier = 10^decimalplace
	return round(number*multiplier)/multiplier
end

function RoundtoZero(input)
	variable input

	if(abs(input) < 1e-03)
		input=0
	endif

	return input
end

function checkLS625ramp(instrID)
	variable instrID
	string response
	variable ramping

	response = queryInstr(instrID,"OPST?\r\n",read_term = "\r\n")
	if(str2num(response) == 6)
		ramping = 0
	else
		ramping = 1
	endif

	return ramping
end

//////////////////
//// Logging /////
//////////////////

function/s GetLS625Status(instrIDx,instrIDz)
	variable instrIDx,instrIDz
	string buffer = "", subbuffer = ""

	subbuffer = ""
	subbuffer = addJSONkeyval(subbuffer, "x", num2str(getLS625field(instrIDx)))
	subbuffer = addJSONkeyval(subbuffer, "z", num2str(getLS625field(instrIDz)))
	buffer = addJSONkeyval(buffer, "field mT", subbuffer)

	subbuffer = ""
	subbuffer = addJSONkeyval(subbuffer, "x", num2str(getLS625rate(instrIDx)))
	subbuffer = addJSONkeyval(subbuffer, "z", num2str(getLS625rate(instrIDz)))
	buffer = addJSONkeyval(buffer, "rate mT/min", subbuffer)

	return addJSONkeyval("", "Two Axis Magnet", buffer)
end
